PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = main
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = PLEASE SET THE TEXT
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import pandas as pd
      Begin Routine:
        data_path = "./sample_data.csv"
        df = pd.read_csv(data_path)
        text.setText(df.to_string())
Flow
  Routine trial
