PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1463, 914]
  expName = main
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
      Each Frame:
        # for all keys:
        text.setText((joystick.getX(), joystick.getY()))
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    JoystickComponent joystick
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = joystick onset
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
