PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1463, 914]
  expName = main
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor = white
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        kb = keyboard.Keyboard()
        value_to_adjust = 1.0
        step = 0.01
        keys_increase = ['f']
        keys_decrease = ['j']
        keys_watched = keys_increase + keys_decrease
      Each Frame:
        pressed = kb.getKeys(keys_watched, waitRelease=False, clear=False)
        released = kb.getKeys(keys_watched, waitRelease=True, clear=True)

        # only one key can be pressed at a time
        if len(pressed) != 1:
            kb.clearEvents()
        else:
            current_time = kb.clock.getTime()
            key = pressed[0]
            if key.name in keys_increase:
                value_to_adjust += step
            else:
                value_to_adjust -= step
            polygon.setSize((value_to_adjust, value_to_adjust))
Flow
  Routine trial
