PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1463, 914]
  expName = main
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent pressed_key_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        kb = keyboard.Keyboard()
      Each Frame:
        current_time = kb.clock.getTime()
        pressed = kb.getKeys(['f', 'j'], waitRelease=False, clear=False)
        released = kb.getKeys(['f', 'j'], waitRelease=True, clear=True)
        key_names = [p.name for p in pressed]
        key_times = [p.tDown - current_time for p in pressed]

        # build the str
        text_contents = []
        for p in pressed:
            text_contents.append(f'{p.name}: {current_time - p.tDown:.3f}')

        pressed_key_text.setText('\n'.join(text_contents))
Flow
  Routine trial
