PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = main
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        kb = keyboard.Keyboard()
        cnt = 0
      Each Frame:
        pressed = kb.getKeys(['space'], waitRelease=False, clear=True)
        if (pressed is not None) and len(pressed) > 0:
            cnt += 1
            text.setText(f"Space pressed {cnt} times")
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = NO TEXT
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Flow
  Routine trial
