PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1463, 914]
  expName = main
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    MouseComponent mouse
      clickable = polygon, polygon_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = white
      pos = (-0.5, 0)
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent polygon_2
      fillColor = white
      pos = (0.5, 0)
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = EDITME
      units = norm
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    CodeComponent code
      Code Type = Py
      Each Frame:
        mouse_pos = mouse.getPos()
        # context = f"Pos {mouse_pos}\n \
        #     In left: {polygon.contains(x = mouse_pos[0], y = mouse_pos[1])}\n \
        #     In right: {polygon_2.contains(x = mouse_pos[0], y = mouse_pos[1])}"
        # context = f"Pos {mouse_pos}\n \
        #     In left: {polygon.contains(x = mouse_pos)}\n \
        #     In right: {polygon_2.contains(x = mouse_pos)}"
        context = f"Pos {mouse_pos}\n \
            In left: {polygon.contains(mouse)}\n \
            In right: {polygon_2.contains(mouse)}"
        text.setText(context)
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
