PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1463, 914]
  expName = main
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        current_index = 0
      Begin Routine:
        global current_index
        text.setText(current_index)
        if current_index > 3:
            trials.finished = True
        current_index += 1
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 99
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    Routine trial
  LoopTerminator trials
