PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1463, 914]
  expName = main
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        import subprocess
        import time
        import os

        # for testing purpose, it is safe to ignore this
        from script import get_shared_memory, read_shared_memory, close_shared_memory

        # create a child process
        current_script_directory = os.path.dirname(os.path.abspath(__file__))

        child = subprocess.Popen(['python', 'script.py'], cwd=current_script_directory, text=True)

        # wait for the child process to start
        time.sleep(1)

        # get the shared memory
        shared_memory = get_shared_memory()
      Each Frame:
        # read the shared memory
        text.setText(read_shared_memory(shared_memory))
      End Experiment:
        # close the shared memory
        close_shared_memory(shared_memory)
        # kill the child process
        child.terminate()
        # wait for the child process to exit
        child.wait()
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
