PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = main
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    ImageComponent image_stim
      size = (1920, 1080)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 239
      units = pix
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        import numpy as np
        from PIL import Image
      Begin Routine:
        n_frames = 240
        speed: int = 30
        frames = []

        first_frame = np.linspace(-1, 1, 1920*1080).reshape(1080, 1920)
        first_frame *= np.pi
        np.sin(first_frame, out=first_frame)
        frames.append(first_frame)
        for i in range(1, n_frames):
            frame = np.roll(first_frame, i*speed, axis=0)
            frames.append(frame)


        # create images for each frame
        images = []
        for frame in frames:
            image = visual.ImageStim(win=win,
                                     image=frame,
                                     units='pix',
                                     size=(1920, 1080))
            images.append(image)

        win.recordFrameIntervals = True
        win.fps()
      Each Frame:
        images[frameN].draw()

        if frameN >= n_frames - 1:
            print("FPS: ", win.fps())
Flow
  Routine trial
