PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = main
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        import numpy as np
      Begin Experiment:
        n_frames = 240
        speed: int = 30
        frames = []

        first_frame = np.linspace(0, 1, 1920*1080).reshape(1080, 1920)
        first_frame *= np.pi
        np.sin(first_frame, out=first_frame)
        first_frame *= 255
        first_frame = first_frame.astype(np.uint8)
        frames.append(first_frame)
        for i in range(1, n_frames):
            frame = np.roll(first_frame, i*speed, axis=0)
            frames.append(frame)

        # save as gif
        from PIL import Image
        images = []
        for frame in frames:
            image = Image.fromarray(frame, mode='L')
            images.append(image)
        images[0].save('rolling_sine_wave.gif',
                       save_all=True,
                       append_images=images[1:],
                       duration=1000//120,
                       loop=0,
                       optimize=False)
      Begin Routine:
        win.recordFrameIntervals = True
        win.fps()
      Each Frame:
        if frameN >= 239 - 1:
            print("FPS: ", win.fps())
    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      movie = rolling_sine_wave.gif
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 239
      units = pix
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Flow
  Routine trial
